<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>VideoAcquisition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FileCapture">
                <cv:FileName>2.avi</cv:FileName>
                <cv:PlaybackRate>1</cv:PlaybackRate>
                <cv:StartPosition>0</cv:StartPosition>
                <cv:PositionUnits>Frames</cv:PositionUnits>
                <cv:Loop>false</cv:Loop>
                <cv:Playing>true</cv:Playing>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>78</cv:X>
                  <cv:Y>33</cv:Y>
                  <cv:Width>532</cv:Width>
                  <cv:Height>434</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>neymaldinho</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>neymaldinho</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:MaskPolygon">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>51</cv:X>
                <cv:Y>81</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>79</cv:X>
                <cv:Y>46</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>260</cv:X>
                <cv:Y>183</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>231</cv:X>
                <cv:Y>220</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>231</cv:X>
                <cv:Y>220</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>260</cv:X>
                <cv:Y>183</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>296</cv:X>
                <cv:Y>210</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>268</cv:X>
                <cv:Y>247</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>407</cv:X>
                <cv:Y>3</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>442</cv:X>
                <cv:Y>29</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>296</cv:X>
                <cv:Y>210</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>260</cv:X>
                <cv:Y>183</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>231</cv:X>
                <cv:Y>220</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>268</cv:X>
                <cv:Y>247</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>123</cv:X>
                <cv:Y>429</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>90</cv:X>
                <cv:Y>400</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>268</cv:X>
                <cv:Y>247</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>296</cv:X>
                <cv:Y>210</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>487</cv:X>
                <cv:Y>356</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>458</cv:X>
                <cv:Y>393</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Frame Count X and Y Coordenates</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>46</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>ToZeroInv</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:MorphologicalOperator">
                <cv:Size>
                  <cv:Width>2</cv:Width>
                  <cv:Height>2</cv:Height>
                </cv:Size>
                <cv:Anchor>
                  <cv:X>-1</cv:X>
                  <cv:Y>-1</cv:Y>
                </cv:Anchor>
                <cv:Shape>Ellipse</cv:Shape>
                <cv:Iterations>2</cv:Iterations>
                <cv:Operation>Dilate</cv:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>ConnectedComponent</cv:Mode>
                <cv:Method>ChainApproxSimple</cv:Method>
                <cv:Offset>
                  <cv:X>2</cv:X>
                  <cv:Y>2</cv:Y>
                </cv:Offset>
                <cv:MinArea>500</cv:MinArea>
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Centroid</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:MaskPolygon">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>78</cv:X>
                <cv:Y>46</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>251</cv:X>
                <cv:Y>178</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>227</cv:X>
                <cv:Y>214</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>52</cv:X>
                <cv:Y>80</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>bottom_Left</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>46</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>ToZeroInv</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:MorphologicalOperator">
                <cv:Size>
                  <cv:Width>3</cv:Width>
                  <cv:Height>3</cv:Height>
                </cv:Size>
                <cv:Anchor>
                  <cv:X>-1</cv:X>
                  <cv:Y>-1</cv:Y>
                </cv:Anchor>
                <cv:Shape>Ellipse</cv:Shape>
                <cv:Iterations>2</cv:Iterations>
                <cv:Operation>Dilate</cv:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>ConnectedComponent</cv:Mode>
                <cv:Method>ChainApproxSimple</cv:Method>
                <cv:Offset>
                  <cv:X>2</cv:X>
                  <cv:Y>2</cv:Y>
                </cv:Offset>
                <cv:MinArea>500</cv:MinArea>
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Centroid</Selector>
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Script>from System import Math, Single

@returns(float)
def process(value):
  if Single.IsNaN(value.X) or Single.IsNaN(value.Y):
    return 0
  return 1</scr:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>If is in arm</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="7" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>